PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.2.1
  Window size (pixels) = [1536, 864]
  expName = Apparent motion
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (3.5, 3.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      units = pix
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    PolygonComponent circle1
      fillColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = $position1
      shape = circle
      size = (30, 30)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      units = pix
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    PolygonComponent circle2
      fillColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = $position2
      shape = circle
      size = (30, 30)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.3
      units = pix
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.1
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      text:
        Are the dots moving?
        respond with "1" if yes and "0" if no
    KeyboardComponent key_resp
      allowedKeys = '1','0'
      forceEndRoutine = True
      startVal [time (s)] = 1.1
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Flow
  LoopInitiator Sequence loopType="TrialHandler"
    conditionsFile = data/condition_seq.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'position1': 0.2, 'position2': 2.0},
      {'position1': 0.3, 'position2': 3.0},
      {'position1': 0.4, 'position2': 4.0},
      {'position1': 0.5, 'position2': 5.0},
      {'position1': 0.6, 'position2': 6.0},
      {'position1': 0.7, 'position2': 7.0},
      {'position1': 0.8, 'position2': 8.0},
      {'position1': 0.9, 'position2': 9.0},
      {'position1': 0.1, 'position2': 10.0},
      {'position1': 0.11, 'position2': 11.0}]
    Routine trial
  LoopTerminator Sequence
  LoopInitiator Random loopType="TrialHandler"
    conditionsFile = data/position.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'position1': 0.1, 'position2': 70.0},
      {'position1': 0.3, 'position2': 77.0},
      {'position1': 56.0, 'position2': 0.67},
      {'position1': 67.0, 'position2': 0.45},
      {'position1': 0.55, 'position2': 98.0},
      {'position1': 77.0, 'position2': 94.0},
      {'position1': 90.0, 'position2': 50.0},
      {'position1': 0.55, 'position2': 0.4},
      {'position1': 0.4, 'position2': 0.2},
      {'position1': 80.0, 'position2': 0.6}]
    Routine trial
  LoopTerminator Random
