PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.2.1
  Window size (pixels) = [1536, 864]
  expName = Delay discounting task
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " +str(reward_today) + " today"   +    "or " + " GBP " +  str(future_reward) + " after " + str(delay) + " days" 
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    KeyboardComponent key_resp
      allowedKeys = 't' , 'l' 
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data/conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 10, 'future_reward': 15, 'delay': 5},
      {'reward_today': 100, 'future_reward': 50, 'delay': 1},
      {'reward_today': 123, 'future_reward': 65, 'delay': 82},
      {'reward_today': 111, 'future_reward': 222, 'delay': 45},
      {'reward_today': 216, 'future_reward': 245, 'delay': 63},
      {'reward_today': 135, 'future_reward': 197, 'delay': 25},
      {'reward_today': 87, 'future_reward': 120, 'delay': 99},
      {'reward_today': 469, 'future_reward': 557, 'delay': 98},
      {'reward_today': 6524, 'future_reward': 5481, 'delay': 5},
      {'reward_today': 335, 'future_reward': 355, 'delay': 6},
      {'reward_today': 54, 'future_reward': 674, 'delay': 100},
      {'reward_today': 132, 'future_reward': 877, 'delay': 53},
      {'reward_today': 546, 'future_reward': 777, 'delay': 54},
      {'reward_today': 897, 'future_reward': 999, 'delay': 4},
      {'reward_today': 999, 'future_reward': 1000, 'delay': 3},
      {'reward_today': 65, 'future_reward': 34, 'delay': 2},
      {'reward_today': 75, 'future_reward': 84, 'delay': 8},
      {'reward_today': 326, 'future_reward': 764, 'delay': 98},
      {'reward_today': 123, 'future_reward': 234, 'delay': 9},
      {'reward_today': 20, 'future_reward': 23, 'delay': 10},
      {'reward_today': 364, 'future_reward': 573, 'delay': 27},
      {'reward_today': 4456, 'future_reward': 6489, 'delay': 97},
      {'reward_today': 6474, 'future_reward': 7764, 'delay': 1000},
      {'reward_today': 3242, 'future_reward': 2886, 'delay': 3},
      {'reward_today': 8282, 'future_reward': 1180, 'delay': 73},
      {'reward_today': 5734, 'future_reward': 357, 'delay': 68}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
    Routine trial
  LoopTerminator trials
