PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Word Primming
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "familiar","unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = E:/data/study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'pen'},
      {'study_word': 'cat'},
      {'study_word': 'table'},
      {'study_word': 'line'},
      {'study_word': 'car'},
      {'study_word': 'ring'},
      {'study_word': 'hair'},
      {'study_word': 'phone'},
      {'study_word': 'clock'},
      {'study_word': 'close'},
      {'study_word': 'closely'},
      {'study_word': 'closer'},
      {'study_word': 'clothes'},
      {'study_word': 'clothing'},
      {'study_word': 'cloud'},
      {'study_word': 'club'},
      {'study_word': 'clue'},
      {'study_word': 'gel'},
      {'study_word': 'look'},
      {'study_word': 'say'},
      {'study_word': 'deaf'},
      {'study_word': 'nail'},
      {'study_word': 'door'},
      {'study_word': 'ladder'},
      {'study_word': 'plant'},
      {'study_word': 'sheet'},
      {'study_word': 'bed'},
      {'study_word': 'boot'},
      {'study_word': None},
      {'study_word': None},
      {'study_word': None},
      {'study_word': None},
      {'study_word': None},
      {'study_word': None},
      {'study_word': None},
      {'study_word': None},
      {'study_word': None},
      {'study_word': None}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = E:/data/test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': 'b_ _k'},
      {'test': '_en'},
      {'test': 'c_t'},
      {'test': 't_b_ _'},
      {'test': 'l_n_'},
      {'test': '_a_'},
      {'test': 'ri_ _'},
      {'test': '_ _ ir'},
      {'test': 'p_on_'},
      {'test': 'g_l'},
      {'test': 'lo_ _'},
      {'test': 'sa_'},
      {'test': 'de _f'},
      {'test': 'na_l'},
      {'test': 'd_ _r'},
      {'test': '_a_de_'},
      {'test': 'p_ _n_'},
      {'test': 'sh_ _t'},
      {'test': 'be_'},
      {'test': 'c_ _k'},
      {'test': 'fr_ _nd'},
      {'test': 'h_ _se'},
      {'test': 't_g_r'},
      {'test': 's_n_ _t'},
      {'test': 'b_ _t_e'},
      {'test': 'mo_ _e_'},
      {'test': 'di_ _o__'},
      {'test': 'pu_ _ _e'},
      {'test': 'wi_d_ _'}]
    Routine test
  LoopTerminator trials_2
