PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = seq_learning
  keyboardBackend = ioHub
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Routines
  Routine seq_phase
    PolygonComponent fixation
      fillColor = 0.0000, 0.0000, 0.0000
      shape = cross
      size = (50, 50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent line1
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent line2
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent line3
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent line_4
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent probe
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 2.0
      units = pix
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    KeyboardComponent key_resp
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2
      storeCorrect = True
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  Routine rand_phase
    PolygonComponent fixation_z
      fillColor = 0.0000, 0.0000, 0.0000
      shape = cross
      size = (50, 50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent line1_z
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent line2_z
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent line3_z
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent line4_z
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent probe_z
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 2.0
      units = pix
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    KeyboardComponent key_resp_z
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2
      storeCorrect = True
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = seq_sequence_con.xlsx
      loopType = sequential
      nReps = 5
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      conditions:
        [{'pos': -50, 'corr_resp': 'x', 'cond_name': 'seq'},
        {'pos': 150, 'corr_resp': 'v', 'cond_name': 'seq'},
        {'pos': 50, 'corr_resp': 'c', 'cond_name': 'seq'},
        {'pos': -150, 'corr_resp': 'z', 'cond_name': 'seq'}]
      Routine seq_phase
    LoopTerminator trials
    LoopInitiator fullRand_phase loopType="TrialHandler"
      conditionsFile = Rand_sequence_con.xlsx
      loopType = fullRandom
      nReps = 5
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      conditions:
        [{'pos': -50, 'corr_resp': 'x', 'cond_name': 'rand'},
        {'pos': 150, 'corr_resp': 'v', 'cond_name': 'rand'},
        {'pos': 50, 'corr_resp': 'c', 'cond_name': 'rand'},
        {'pos': -150, 'corr_resp': 'z', 'cond_name': 'rand'}]
      Routine rand_phase
    LoopTerminator fullRand_phase
  LoopTerminator trials_2
